CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample>.*) (?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "BF.converted_ilastik")
    Name to assign these images:BF_processed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "BF.converted")
    Name to assign these images:BF_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "FITC_backgroundsubtracted")
    Name to assign these images:FITC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "T_Red_backgroundsubtracted")
    Name to assign these images:T_Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "BF.converted_edge_Probabilities")
    Name to assign these images:Edges
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:Edges
    Name the output image:Threshold_Edges
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,0.2
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    Log transform before thresholding?:No
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
Threshold:[module_num:6|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
    Select the input image:BF_processed
    Name the output image:Threshold_BF_process
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,0.2
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    Log transform before thresholding?:No
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
MaskImage:[module_num:7|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
    Select the input image:Threshold_Edges
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_BF_process
    Invert the mask?:No

ConvertImageToObjects:[module_num:8|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
    Select the input image:MaskBlue
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

FillObjects:[module_num:9|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
    Select the input object:ConvertImageToObjects
    Name the output object:FillObjects
    Minimum hole size:10
    Planewise fill:No

MeasureObjectSizeShape:[module_num:10|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notes:['Measures the size of oospores, identified in module 5 IdentifyPrimaryObjects.']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
    Select object sets to measure:FillObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:FillObjects
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
Watershed:[module_num:12|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
    Select the input image:CellImage
    Name the output object:Watershed
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:Threshold
    Mask:Threshold_Mask
    Connectivity:2
    Compactness:0.0
    Footprint:4
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:InvertedEdge
    Segmentation distance transform smoothing factor:0
    Minimum distance between seeds:5
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ErodeObjects:[module_num:13|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
    Select the input object:Watershed
    Name the output object:ErodeObjects
    Structuring element:Disk,1
    Prevent object removal:Yes
    Relabel resulting objects:No

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:ErodeObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

FilterObjects:[module_num:15|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
    Select the objects to filter:ErodeObjects
    Name the output objects:Oospores_BF
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:Yes
    Maximum value:250
    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:Yes
    Maximum value:2

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Oospores_BF
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:17|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notes:['Measures the fluorescence intensity of oospores (identified in module 5 IdentifyPrimaryObjects) in the red and green channel (regardless of whether they were above the thresholds in modules 7 & 8)']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
    Select images to measure:FITC, T_Red
    Select objects to measure:Oospores_BF

FilterObjects:[module_num:18|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
    Select the objects to filter:Oospores_BF
    Name the output objects:Oospores_green
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_FITC
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_T_Red
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.05

FilterObjects:[module_num:19|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
    Select the objects to filter:Oospores_BF
    Name the output objects:Oospores_red
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_FITC
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.03
    Select the measurement to filter by:Intensity_UpperQuartileIntensity_T_Red
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:20|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
    Select the objects to filter:Oospores_BF
    Name the output objects:Oospores_dual
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_FITC
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_T_Red
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:21|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
    Select the objects to filter:Oospores_BF
    Name the output objects:Oospores_unstained
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_FITC
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.03
    Select the measurement to filter by:Intensity_UpperQuartileIntensity_T_Red
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.05

GrayToColor:[module_num:22|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notes:['Creates a merged image using the fluorescent channels.']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
    Select a color scheme:RGB
    Rescale intensity:No
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    Select the image to be colored green:FITC
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    Name the output image:ColorImage_green
    Relative weight for the red image:2.0
    Relative weight for the green image:2.0
    Relative weight for the blue image:1.0
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
GrayToColor:[module_num:23|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:T_Red
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    Name the output image:ColorImage_red
    Relative weight for the red image:2.0
    Relative weight for the green image:2.0
    Relative weight for the blue image:1.0
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
GrayToColor:[module_num:24|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:T_Red
    Select the image to be colored green:FITC
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    Name the output image:ColorImage_Merge
    Relative weight for the red image:2.0
    Relative weight for the green image:2.0
    Relative weight for the blue image:1.0
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
ImageMath:[module_num:25|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notes:['Creates another image showing the original brightfield image with the merged fluorescence image from module 21 GrayToColor.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BF_overlay
    Image or measurement?:Image
    Select the first image:BF_raw
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:ColorImage_Merge
    Multiply the second image by:1.0
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
OverlayOutlines:[module_num:26|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notes:['Creates another image outlining the identified oospores (module 5 IdentifyPrimaryObjects) over the brightfield and fluorescent image from module 22 ImageMath.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BF_overlay
    Name the output image:Oospore_outlines_BF
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:blue
    Select objects to display:Oospores_BF

OverlayOutlines:[module_num:27|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notes:['Creates another image outlining the identified fluorescent objects (modules 9, 10 & 15 IdentifyPrimaryObjects) over the brightfield and fluorescent image from module 22 ImageMath.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BF_overlay
    Name the output image:Oospore_outlines_fluoro
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:green
    Select objects to display:Oospores_green
    Select outline color:red
    Select objects to display:Oospores_red
    Select outline color:yellow
    Select objects to display:Oospores_dual
    Select outline color:blue
    Select objects to display:Oospores_unstained

SaveImages:[module_num:28|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notes:['Saves the merged fluorescent image (module 21 GrayToColor) in the default output folder.']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
    Select the type of image to save:Image
    Select the image to save:ColorImage_green
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_green
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder|/Users/veneskey/svn/pipeline/ExampleImages/ExampleYeastColonies_BT_Images
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    Save with lossless compression?:No

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:ColorImage_red
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_red
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder|/Users/veneskey/svn/pipeline/ExampleImages/ExampleYeastColonies_BT_Images
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    Save with lossless compression?:No

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:ColorImage_Merge
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_merge
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder|/Users/veneskey/svn/pipeline/ExampleImages/ExampleYeastColonies_BT_Images
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    Save with lossless compression?:No

SaveImages:[module_num:31|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notes:['Saves the merged brightfield and fluorescent image (module 22 ImageMath) in the default output folder.']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
    Select the type of image to save:Image
    Select the image to save:BF_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_merge_with_BF
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder|/Users/veneskey/svn/pipeline/ExampleImages/ExampleYeastColonies_BT_Images
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    Save with lossless compression?:No

SaveImages:[module_num:32|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notes:['Saves the outlined identified oospores (module 23 OverlayOutlines) in the default output folder.']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
    Select the type of image to save:Image
    Select the image to save:Oospore_outlines_BF
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines_BF_objects
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder|/Users/veneskey/svn/pipeline/ExampleImages/ExampleYeastColonies_BT_Images
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    Save with lossless compression?:No

SaveImages:[module_num:33|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notes:['Saves the outlined fluorescent identified oospores (module 24 OverlayOutlines) in the default output folder.']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
    Select the type of image to save:Image
    Select the image to save:Oospore_outlines_fluoro
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines_flouro
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder|/Users/veneskey/svn/pipeline/ExampleImages/ExampleYeastColonies_BT_Images
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:34|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Oospores_BF|Location_Center_Z,Oospores_BF|Location_Center_X,Oospores_BF|Location_Center_Y,Oospores_BF|AreaShape_Area,Oospores_BF|AreaShape_MedianRadius,Oospores_BF|AreaShape_MeanRadius,Oospores_BF|Intensity_MaxIntensity_FITC,Oospores_BF|Intensity_MaxIntensity_T_Red,Oospores_BF|Intensity_StdIntensity_T_Red,Oospores_BF|Intensity_StdIntensity_FITC,Oospores_BF|Intensity_UpperQuartileIntensity_T_Red,Oospores_BF|Intensity_UpperQuartileIntensity_FITC,Oospores_BF|Intensity_MinIntensity_T_Red,Oospores_BF|Intensity_MinIntensity_FITC,Oospores_BF|Intensity_IntegratedIntensity_T_Red,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Oospores_BF
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
